CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:407
GitHash:
ModuleCount:54
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes

NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does Series "0") (metadata does ChannelName "AF488")
    Name to assign these images:green_channel
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Series "0") (or (metadata does ChannelName "AF594") (metadata does ChannelName "TexRe"))
    Name to assign these images:red_channel
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Smooth:[module_num:5|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
    Select the input image:green_channel
    Name the output image:smooth_green_channel
    Select smoothing method:Median Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:6
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
Smooth:[module_num:6|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
    Select the input image:red_channel
    Name the output image:smooth_red_channel
    Select smoothing method:Median Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:6
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
RescaleIntensity:[module_num:7|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
    Select the input image:smooth_green_channel
    Name the output image:live_cells
    Rescaling method:Divide by the image's maximum
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
RescaleIntensity:[module_num:8|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
    Select the input image:smooth_red_channel
    Name the output image:dead_cells
    Rescaling method:Divide by the image's maximum
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
ImageMath:[module_num:9|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:organoid_channel
    Image or measurement?:Image
    Select the first image:live_cells
    Multiply the first image by:0.5
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    Image or measurement?:Image
    Select the second image:dead_cells
    Multiply the second image by:0.5
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
EnhanceOrSuppressFeatures:[module_num:10|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
    Select the input image:organoid_channel
    Name the output image:background_subtracted_organoid_channel
    Select the operation:Enhance
    Feature size:100
    Feature type:Speckles
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    Speed and accuracy:Fast
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
Threshold:[module_num:11|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
    Select the input image:background_subtracted_organoid_channel
    Name the output image:organoid_mask
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:0.0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.01,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:1.0
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
Opening:[module_num:12|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
    Select the input image:organoid_mask
    Name the output image:opening_organoid
    Structuring element:disk,5

ConvertImageToObjects:[module_num:13|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
    Select the input image:opening_organoid
    Name the output object:ToPreFilter
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

MeasureObjectSizeShape:[module_num:14|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
    Select object sets to measure:ToPreFilter
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:15|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
    Select the objects to filter:ToPreFilter
    Name the output objects:PreFilter
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:50
    Filter using a maximum measurement value?:Yes
    Maximum value:100000

ConvertObjectsToImage:[module_num:16|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
    Select the input objects:PreFilter
    Name the output image:prefiltered_organoids
    Select the color format:Binary (black & white)
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
DilateImage:[module_num:17|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
    Select the input image:prefiltered_organoids
    Name the output image:dilated_organoid
    Structuring element:disk,22

RemoveHoles:[module_num:18|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
    Select the input image:dilated_organoid
    Name the output image:remove_holes_organoids
    Size of holes to fill:1000

ErodeImage:[module_num:19|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
    Select the input image:remove_holes_organoids
    Name the output image:eroded_organoids
    Structuring element:disk,22

Closing:[module_num:20|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
    Select the input image:eroded_organoids
    Name the output image:closing_organoid
    Structuring element:disk,20

Opening:[module_num:21|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
    Select the input image:closing_organoid
    Name the output image:polish_organoids
    Structuring element:disk,50

ConvertImageToObjects:[module_num:22|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
    Select the input image:polish_organoids
    Name the output object:PreOrganoids
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

FillObjects:[module_num:23|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enabled:False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
    Select the input object:PreOrganoids
    Name the output object:FilledOrganoids
    Minimum hole size:1
    Planewise fill:Yes

FilterObjects:[module_num:24|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enabled:False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
    Select the objects to filter:PreOrganoids
    Name the output objects:FilterObjects
    Select the filtering mode:Image or mask border
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    Additional object count:0
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
MeasureObjectSizeShape:[module_num:25|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
    Select object sets to measure:PreOrganoids
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:26|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
    Select the objects to filter:PreOrganoids
    Name the output objects:Organoids
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:3
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:3000
    Filter using a maximum measurement value?:Yes
    Maximum value:450000
    Select the measurement to filter by:AreaShape_Eccentricity
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0.8
    Select the measurement to filter by:AreaShape_Solidity
    Filter using a minimum measurement value?:Yes
    Minimum value:0.5
    Filter using a maximum measurement value?:No
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
MaskImage:[module_num:27|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
    Select the input image:live_cells
    Name the output image:live_cells_masked
    Use objects or an image as a mask?:Objects
    Select object for mask:Organoids
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    Invert the mask?:No

Threshold:[module_num:28|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
    Select the input image:live_cells_masked
    Name the output image:live_mask
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:Yes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
MaskImage:[module_num:29|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
    Select the input image:live_mask
    Name the output image:live_sel_mask
    Use objects or an image as a mask?:Objects
    Select object for mask:Organoids
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    Invert the mask?:No

ConvertImageToObjects:[module_num:30|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
    Select the input image:live_sel_mask
    Name the output object:LiveCells
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

MaskImage:[module_num:31|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
    Select the input image:dead_cells
    Name the output image:dead_cells_mask
    Use objects or an image as a mask?:Objects
    Select object for mask:Organoids
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    Invert the mask?:No

Threshold:[module_num:32|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
    Select the input image:dead_cells_mask
    Name the output image:dead_mask
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
MaskImage:[module_num:33|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
    Select the input image:dead_mask
    Name the output image:dead_sel_mask
    Use objects or an image as a mask?:Objects
    Select object for mask:Organoids
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    Invert the mask?:No

ConvertImageToObjects:[module_num:34|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
    Select the input image:dead_sel_mask
    Name the output object:DeadCells
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

ImageMath:[module_num:35|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:detected_area_mask
    Image or measurement?:Image
    Select the first image:dead_sel_mask
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:live_sel_mask
    Multiply the second image by:1.0
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
ConvertImageToObjects:[module_num:36|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
    Select the input image:detected_area_mask
    Name the output object:DetectedArea
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

MeasureObjectSizeShape:[module_num:37|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
    Select object sets to measure:DeadCells, DetectedArea, LiveCells, Organoids
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

RelateObjects:[module_num:38|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
    Parent objects:Organoids
    Child objects:LiveCells
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:39|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
    Parent objects:Organoids
    Child objects:DeadCells
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:40|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
    Parent objects:Organoids
    Child objects:DetectedArea
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
CalculateMath:[module_num:41|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
    Name the output measurement:LiveTotalArea
    Operation:Multiply
    Select the first operand measurement type:Object
    Select the first operand objects:LiveCells
    Select the first operand measurement:AreaShape_Area
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Object
    Select the second operand objects:Organoids
    Select the second operand measurement:Children_LiveCells_Count
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:42|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
    Name the output measurement:DeadTotalArea
    Operation:Multiply
    Select the first operand measurement type:Object
    Select the first operand objects:DeadCells
    Select the first operand measurement:AreaShape_Area
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Object
    Select the second operand objects:Organoids
    Select the second operand measurement:Children_DeadCells_Count
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:43|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
    Name the output measurement:DetectedTotalArea
    Operation:Multiply
    Select the first operand measurement type:Object
    Select the first operand objects:DetectedArea
    Select the first operand measurement:AreaShape_Area
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Object
    Select the second operand objects:Organoids
    Select the second operand measurement:Children_DetectedArea_Count
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:44|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
    Name the output measurement:LiveAreaPercentage
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:LiveCells
    Select the numerator measurement:Math_LiveTotalArea
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:Organoids
    Select the denominator measurement:AreaShape_Area
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:100.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:45|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
    Name the output measurement:DeadAreaPercentage
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:DeadCells
    Select the numerator measurement:Math_DeadTotalArea
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:Organoids
    Select the denominator measurement:AreaShape_Area
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:100.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
ExportToSpreadsheet:[module_num:46|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Organoids|Mean_LiveCells_AreaShape_Area,Organoids|Mean_DeadCells_AreaShape_Area,Organoids|AreaShape_Area,Organoids|Math_DeadAreaPercentage,Organoids|Math_DetectedTotalArea,Organoids|Math_DeadTotalArea,Organoids|Math_LiveTotalArea,Organoids|Math_LiveAreaPercentage,Organoids|Number_Object_Number,Organoids|Location_Center_X,Organoids|Location_Center_Y,Organoids|Children_DeadCells_Count,Organoids|Children_LiveCells_Count,DetectedArea|AreaShape_Area,DetectedArea|Math_DetectedTotalArea,DetectedArea|Number_Object_Number,DetectedArea|Parent_Organoids,DeadCells|Number_Object_Number,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:test_all_images
    Overwrite existing files without warning?:No
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
ConvertObjectsToImage:[module_num:47|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
    Select the input objects:Organoids
    Name the output image:organoids_to_save
    Select the color format:uint16
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
ConvertObjectsToImage:[module_num:48|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
    Select the input objects:LiveCells
    Name the output image:live_to_save
    Select the color format:uint16
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
ConvertObjectsToImage:[module_num:49|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
    Select the input objects:DeadCells
    Name the output image:dead_to_save
    Select the color format:uint16
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
ConvertObjectsToImage:[module_num:50|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
    Select the input objects:DetectedArea
    Name the output image:detected_to_save
    Select the color format:uint16
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
SaveImages:[module_num:51|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
    Select the type of image to save:Image
    Select the image to save:organoids_to_save
    Select method for constructing file names:From image filename
    Select image name for file prefix:green_channel
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_organoid_mask
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:52|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
    Select the type of image to save:Image
    Select the image to save:dead_to_save
    Select method for constructing file names:From image filename
    Select image name for file prefix:green_channel
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_dead_mask
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:53|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
    Select the type of image to save:Image
    Select the image to save:live_to_save
    Select method for constructing file names:From image filename
    Select image name for file prefix:green_channel
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_live_mask
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:54|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
    Select the type of image to save:Image
    Select the image to save:detected_to_save
    Select method for constructing file names:From image filename
    Select image name for file prefix:green_channel
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_detected_mask
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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